WorkflowBuilder(Version=2.7.1)
GroupWorkflow Whisking
    SubscribeSubject Face_Cam
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0))
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0.04, ThresholdValue=7, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=28, Y=81), Point(X=131, Y=81), Point(X=131, Y=175), Point(X=28, Y=175))), Operation=Avg)
    -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=0.8) => #5
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1) => #7
    #5 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> IntProperty(Value=0) => #9
    #7, #9 -> Merge => #10
    -> Disable Bonsai.Dsp.Buffer(Count=300, Skip=nil)
    -> Disable Bonsai.Dsp.Sum
    -> Disable MemberSelector(Selector=Val0)
    -> Disable GreaterThan(Operand=IntProperty(Value=200))
    -> Disable BehaviorSubject startW
    #10 -> Bonsai.Dsp.Buffer(Count=100, Skip=nil)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> GreaterThan(Operand=IntProperty(Value=50))
    -> BehaviorSubject endW

    SubscribeSubject endW => #21
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> StringProperty(Value=Whisking) => #23
    #21 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> StringProperty(Value="No whisking") => #25
    #23, #25 -> Merge
    -> DistinctUntilChanged
    -> MulticastSubject outputs

GroupWorkflow "No whisking evoked" => #1
    SubscribeSubject above30
    -> Equal(Operand=IntProperty(Value=3))
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject endW
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject endW
    -> Delay(DueTime=PT2S)
    -> Condition => #7
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    NewThreadScheduler
    -> Delay(DueTime=PT1S)
    -> BehaviorSubject Evoked_on
    -> StringProperty(Value=Evoked_No_start)
    -> MulticastSubject outputs => #12
    #12, #4 -> TakeUntil => #13
    #13, #7 -> SubscribeWhen
    -> Repeat
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject above30 => #18
    #18, #2 -> TakeUntil
    -> WorkflowOutput
GroupWorkflow "Whisking evoked" => #2
    SubscribeSubject above30No
    -> Equal(Operand=IntProperty(Value=30))
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject endW
    -> Delay(DueTime=PT2S)
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject endW
    -> Condition => #7
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    NewThreadScheduler
    -> Delay(DueTime=PT1S)
    -> MulticastSubject Evoked_on
    -> StringProperty(Value=Evoked_Whisk_start)
    -> MulticastSubject outputs => #12
    #12, #7 -> TakeUntil => #13
    #13, #5 -> SubscribeWhen
    -> Repeat
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject above30No => #18
    #18, #2 -> TakeUntil
    -> WorkflowOutput
SubscribeSubject "Start Recording" => #3
#1, #3 -> SubscribeWhen
#2, #3 -> SubscribeWhen

GroupWorkflow "No whisking main"
    SubscribeSubject endW
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject endW
    -> Delay(DueTime=PT2S)
    -> BitwiseNot
    -> Bonsai.Scripting.IronPython.PythonTransform => #5
      Script:
        @returns(int)
        def process(value):
          return value
    NewThreadScheduler
    -> SelectMany "Main objects" => #7
        DefaultScheduler
        -> Delay(DueTime=PT1S)
        -> SelectMany "reset motor"
            WorkflowInput Source1 => #0
            SubscribeSubject At_start
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #2 -> Sample
            -> WorkflowOutput
            #0 -> StringProperty(Value=b)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=10, double=1, double=1, double=1, double=10))
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject Condition
        -> GroupWorkflow "mapping to serial"
            WorkflowInput Source1 => #0
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=l) => #3
            #0 -> Equal(Operand=IntProperty(Value=1))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=m) => #6
            #0 -> Equal(Operand=IntProperty(Value=2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=n) => #9
            #0 -> Equal(Operand=IntProperty(Value=3))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=s) => #12
            #0 -> Equal(Operand=IntProperty(Value=4))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=e) => #15
            #3, #6, #9, #12, #15 -> Merge
            -> WorkflowOutput
        -> SelectMany
            WorkflowInput Source1 => #0
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
            SubscribeSubject At_object
            -> Condition => #3
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #3 -> Sample
            -> WorkflowOutput
        -> SelectMany "Motor fwd"
            WorkflowInput Source1 => #0
            SubscribeSubject At_whiskers
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #2 -> Sample
            -> WorkflowOutput
            #0 -> StringProperty(Value=f)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
        -> BehaviorSubject sound
        -> Delay(DueTime=PT5S)
        -> BooleanProperty(Value=true)
        -> BehaviorSubject soundOff
        -> SelectMany "reset motor"
            WorkflowInput Source1 => #0
            SubscribeSubject At_start
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #2 -> Sample
            -> WorkflowOutput
            #0 -> StringProperty(Value=b)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
        -> WorkflowOutput

        SubscribeSubject sound => #16
        -> Equal(Operand=StringProperty(Value=s))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject playSound
        #16 -> Equal(Operand=StringProperty(Value=e))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject playSound

        SubscribeSubject soundOff
        -> MulticastSubject stopSound
    #7, #1 -> TakeUntil => #8
    SubscribeSubject above30
    -> Equal(Operand=IntProperty(Value=3))
    -> Bonsai.Scripting.IronPython.PythonTransform => #11
      Script:
        @returns(int)
        def process(value):
          return value
    #5, #11 -> WithLatestFrom
    -> Add
    -> Equal(Operand=IntProperty(Value=2))
    -> Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    #8, #15 -> SubscribeWhen
    -> Repeat => #17
    SubscribeSubject "End Exp" => #18
    #17, #18 -> TakeUntil

GroupWorkflow "Whisking main"
    SubscribeSubject endW
    -> Condition => #1
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject endW
    -> Delay(DueTime=PT2S)
    -> Bonsai.Scripting.IronPython.PythonTransform => #4
      Script:
        @returns(int)
        def process(value):
          return value
    SubscribeSubject above30No
    -> Equal(Operand=IntProperty(Value=3))
    -> Bonsai.Scripting.IronPython.PythonTransform => #7
      Script:
        @returns(int)
        def process(value):
          return value
    #4, #7 -> WithLatestFrom
    -> Add
    -> Equal(Operand=IntProperty(Value=2))
    -> Condition => #11
        WorkflowInput Source1
        -> WorkflowOutput
    ImmediateScheduler
    -> SelectMany "Main objects" => #13
        DefaultScheduler
        -> Delay(DueTime=PT1S)
        -> SelectMany "reset motor"
            WorkflowInput Source1 => #0
            SubscribeSubject At_start
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #2 -> Sample
            -> WorkflowOutput
            #0 -> StringProperty(Value=b)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=10, double=1, double=1, double=1, double=10))
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject Condition
        -> GroupWorkflow "mapping to serial"
            WorkflowInput Source1 => #0
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=l) => #3
            #0 -> Equal(Operand=IntProperty(Value=1))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=m) => #6
            #0 -> Equal(Operand=IntProperty(Value=2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=n) => #9
            #0 -> Equal(Operand=IntProperty(Value=3))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=s) => #12
            #0 -> Equal(Operand=IntProperty(Value=4))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=e) => #15
            #3, #6, #9, #12, #15 -> Merge
            -> WorkflowOutput
        -> SelectMany
            WorkflowInput Source1 => #0
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
            SubscribeSubject At_object
            -> Condition => #3
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #3 -> Sample
            -> WorkflowOutput
        -> SelectMany "Motor fwd"
            WorkflowInput Source1 => #0
            SubscribeSubject At_whiskers
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #2 -> Sample
            -> WorkflowOutput
            #0 -> StringProperty(Value=f)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
        -> BehaviorSubject sound
        -> Delay(DueTime=PT5S)
        -> BooleanProperty(Value=true)
        -> BehaviorSubject soundOff
        -> SelectMany "reset motor"
            WorkflowInput Source1 => #0
            SubscribeSubject At_start
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0, #2 -> Sample
            -> WorkflowOutput
            #0 -> StringProperty(Value=b)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)
        -> WorkflowOutput

        SubscribeSubject sound => #16
        -> Equal(Operand=StringProperty(Value=s))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject playSound
        #16 -> Equal(Operand=StringProperty(Value=e))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject playSound

        SubscribeSubject soundOff
        -> MulticastSubject stopSound
    #13, #1 -> TakeUntil => #14
    #14, #11 -> SubscribeWhen
    -> Repeat => #16
    SubscribeSubject "End Exp" => #17
    #16, #17 -> TakeUntil
    -> WorkflowOutput

GroupWorkflow Reports
    Bonsai.IO.SerialStringRead(PortName=COM15, NewLine=\r\n)
    -> BehaviorSubject outputs => #1
    -> Equal(Operand=StringProperty(Value=aluminum)) => #2
    #1 -> Equal(Operand=StringProperty(Value="aluminum silenced")) => #3
    #1 -> Equal(Operand=StringProperty(Value=non)) => #4
    #1 -> Equal(Operand=StringProperty(Value="at Whiskers"))
    -> BehaviorSubject At_whiskers
    #1 -> Equal(Operand=StringProperty(Value=reset))
    -> BehaviorSubject At_start
    #1 -> Equal(Operand=StringProperty(Value=obj4)) => #9
    #2, #3, #4, #9 -> Merge
    -> BehaviorSubject At_object
    #1 -> Equal(Operand=StringProperty(Value="Moving back"))
    -> BehaviorSubject motorBack

SubscribeSubject outputs

GroupWorkflow "Face camera" => #10
    Bonsai.Windows.Input.KeyDown(Filter=F3, SuppressRepetitions=false) => #0
    Bonsai.Windows.Input.KeyDown(Filter=F5, SuppressRepetitions=false) => #1
    SubscribeSubject "Start Recording" => #2
    #0, #2 -> Merge
    -> Delay(DueTime=PT1S) => #4
    SubscribeSubject FileName => #5
    StringProperty(Value=_Face.avi) => #6
    #5, #6 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #9
    Bonsai.USB3VISION_NI_CAMERA.IMAQ_Camera(cameraName=cam0, frameWidth=720, frameHeight=540, fps=100) => #10
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=125, Y=105, Width=323, Height=281))
    -> BehaviorSubject Face_Cam => #13
    #13, #9 -> Bonsai.Vision.VideoWriter => #14
      FileName=D:\Ben\testing\a10001_Face.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=40
      FrameRate=100
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #10 -> MemberSelector(Selector=BufferIndex) => #15
    SubscribeSubject FileName => #16
    StringProperty(Value=_Face.csv) => #17
    #16, #17 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #20
    #15, #20 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\testing\a10001_Face.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #21
    #14, #21 -> Zip => #22
    #22, #4 -> SubscribeWhen => #23
    #23, #1 -> TakeUntil
    -> Repeat
    -> WorkflowOutput
GroupWorkflow "Whiskers camera" => #11
    Bonsai.Windows.Input.KeyDown(Filter=F3, SuppressRepetitions=false) => #0
    Bonsai.Windows.Input.KeyDown(Filter=F5, SuppressRepetitions=false) => #1
    SubscribeSubject "Start Recording" => #2
    #0, #2 -> Merge
    -> Delay(DueTime=PT1S) => #4
    SubscribeSubject "End Exp" => #5
    #1, #5 -> Merge => #6
    SubscribeSubject FileName => #7
    StringProperty(Value=_Whiskers.avi) => #8
    #7, #8 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #11
    Bonsai.USB3VISION_NI_CAMERA.IMAQ_Camera(cameraName=cam2, frameWidth=720, frameHeight=540, fps=400) => #12
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0))
    -> BehaviorSubject Whisker_Cam => #15
    #15, #11 -> Bonsai.Vision.VideoWriter => #16
      FileName=D:\Ben\testing\a10001_Whiskers.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=40
      FrameRate=400
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #12 -> MemberSelector(Selector=BufferIndex) => #17
    SubscribeSubject FileName => #18
    StringProperty(Value=_Whiskers.csv) => #19
    #18, #19 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #22
    #17, #22 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\testing\a10001_Whiskers.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #23
    #16, #23 -> Zip => #24
    #24, #4 -> SubscribeWhen => #25
    #25, #6 -> TakeUntil
    -> Repeat
    -> WorkflowOutput
SubscribeSubject "Stop Recording" => #12
#10, #12 -> TakeUntil
#11, #12 -> TakeUntil

GroupWorkflow MetaData
    ExternalizedMapping(Value(DisplayName="Animal ID"))
    -> StringProperty(Value=a10001)
    -> BehaviorSubject "Animal ID" => #2
    ExternalizedMapping(Value(DisplayName="Date of Exp."))
    -> DateTimeProperty(Value=2023-03-19T15:44:12) => #4
    ExternalizedMapping(Value(DisplayName=DOB))
    -> DateTimeProperty(Value=2022-11-07T00:00:00) => #6
    SubscribeSubject Path => #7
    SubscribeSubject Channels => #8
    #2, #4, #6, #7, #8 -> Zip
    -> BehaviorSubject meta

    SubscribeSubject FileName => #11
    StringProperty(Value=.csv) => #12
    #11, #12 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #15
    SubscribeSubject meta => #16
    #15, #16 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\testing\a10001.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

    ExternalizedMapping(Value(DisplayName=Path))
    -> PropertySource<Bonsai.IO.EnumerateDirectories,System.String>(MemberName=Path, Value=D:\Ben\testing)
    -> BehaviorSubject Path

    SubscribeSubject "Animal ID" => #21
    SubscribeSubject Path => #22
    StringProperty(Value=\) => #23
    #22, #23, #21 -> Zip
    -> Add
    -> BehaviorSubject FileName

    ExternalizedMapping(Whisking, "Record ctrl", "Whisk cam", "Facw Cam", Trial, "Events Output", Sync, Running, Mic, Speaker)
    -> GroupWorkflow "Channel Nums"
        StringProperty(Value="D - Whisking") => #0
        StringProperty(Value="D - Record") => #1
        ExternalizedMapping(Value(DisplayName=Whisking))
        -> IntProperty(Value=2) => #3
        #0, #3 -> Zip => #4
        ExternalizedMapping(Value(DisplayName="Record ctrl"))
        -> IntProperty(Value=7) => #6
        #1, #6 -> Zip => #7
        StringProperty(Value="D - Whisk Cam") => #8
        ExternalizedMapping(Value(DisplayName="Whisk cam"))
        -> IntProperty(Value=5) => #10
        #8, #10 -> Zip => #11
        StringProperty(Value="D - Face Camera") => #12
        ExternalizedMapping(Value(DisplayName="Facw Cam"))
        -> IntProperty(Value=6) => #14
        #12, #14 -> Zip => #15
        StringProperty(Value="D - Trial") => #16
        ExternalizedMapping(Value(DisplayName=Trial))
        -> IntProperty(Value=3) => #18
        #16, #18 -> Zip => #19
        StringProperty(Value="D - Events output") => #20
        ExternalizedMapping(Value(DisplayName="Events Output"))
        -> IntProperty(Value=4) => #22
        #20, #22 -> Zip => #23
        StringProperty(Value="D - Sync") => #24
        ExternalizedMapping(Value(DisplayName=Sync))
        -> IntProperty(Value=0) => #26
        #24, #26 -> Zip => #27
        #4, #7, #11, #15, #19, #23, #27 -> Zip => #28
        StringProperty(Value="A - Running") => #29
        ExternalizedMapping(Value(DisplayName=Running))
        -> IntProperty(Value=1) => #31
        #29, #31 -> Zip => #32
        StringProperty(Value="A - Microphone") => #33
        ExternalizedMapping(Value(DisplayName=Mic))
        -> IntProperty(Value=0) => #35
        #33, #35 -> Zip => #36
        StringProperty(Value="A - Speaker") => #37
        ExternalizedMapping(Value(DisplayName=Speaker))
        -> IntProperty(Value=2) => #39
        #37, #39 -> Zip => #40
        #32, #36, #40 -> Zip => #41
        #28, #41 -> Zip
        -> BehaviorSubject Channels

Bonsai.Windows.Input.KeyDown(Filter=F10, SuppressRepetitions=false)
-> BehaviorSubject "Start Recording"
-> SelectMany "reset motor"
    WorkflowInput Source1 => #0
    SubscribeSubject At_start
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #2 -> Sample
    -> WorkflowOutput
    #0 -> StringProperty(Value=b)
    -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)

IntProperty(Value=1000)
-> BehaviorSubject Condition

GroupWorkflow "CSV files"
    SubscribeSubject Condition
    -> ElementIndex
    -> Timestamp => #2
    SubscribeSubject FileName => #3
    StringProperty(Value=_conditions.csv) => #4
    #3, #4 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #7
    SubscribeSubject "Start Recording" => #8
    #2, #8 -> SubscribeWhen => #9
    SubscribeSubject "Stop Recording" => #10
    #9, #10 -> TakeUntil => #11
    #11, #7 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\testing\a10001_conditions.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject outputs
    -> ElementIndex
    -> Timestamp => #15
    SubscribeSubject FileName => #16
    StringProperty(Value=_allEvents.csv) => #17
    #16, #17 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #20
    SubscribeSubject "Start Recording" => #21
    #15, #21 -> SubscribeWhen => #22
    SubscribeSubject "Stop Recording" => #23
    #22, #23 -> TakeUntil => #24
    #24, #20 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\testing\a10001_allEvents.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow "Digital outputs"
    SubscribeSubject outputs
    -> BooleanProperty(Value=true)
    -> BehaviorSubject outputsOut
    -> Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject outputsOut

    BooleanProperty(Value=false) => #6
    -> MulticastSubject outputsOut
    #6 -> MulticastSubject "Record control"

    SubscribeSubject outputsOut
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev2/port0/line4))

    SubscribeSubject "Start Recording"
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "Record control"

    SubscribeSubject "Stop Recording"
    -> BooleanProperty(Value=false)
    -> MulticastSubject "Record control"

    SubscribeSubject "Record control" => #17
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev2/port0/line0))
    #17 -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev2/port0/line7))

    SubscribeSubject endW => #20
    BooleanProperty(Value=false) => #21
    #20, #21 -> Merge
    -> DistinctUntilChanged
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev2/port0/line2))

    SubscribeSubject At_whiskers => #25
    BooleanProperty(Value=false) => #26
    #25, #26 -> Merge
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev2/port0/line3))

GroupWorkflow "Evoked sounds"

GroupWorkflow "Manual control"
    Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> StringProperty(Value=l) => #1
    Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=false)
    -> StringProperty(Value=m) => #3
    Bonsai.Windows.Input.KeyDown(Filter=N, SuppressRepetitions=false)
    -> StringProperty(Value=n) => #5
    Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 B D F Shift", SuppressRepetitions=false)
    -> StringProperty(Value=f) => #7
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false)
    -> StringProperty(Value=b) => #9
    Bonsai.Windows.Input.KeyDown(Filter=F4, SuppressRepetitions=false)
    -> StringProperty(Value=3) => #11
    #1, #3, #5, #7, #9, #11 -> Merge
    -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)

Bonsai.Windows.Input.KeyDown(Filter=F9, SuppressRepetitions=false)
-> PublishSubject "End Exp"
-> SelectMany "reset motor"
    WorkflowInput Source1 => #0
    SubscribeSubject At_start
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #2 -> Sample
    -> WorkflowOutput
    #0 -> StringProperty(Value=b)
    -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)

GroupWorkflow "ExpEnd tuning" => #28
    GroupWorkflow "No whisking evoked"
        SubscribeSubject above30End
        -> Equal(Operand=IntProperty(Value=30))
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject endW
        -> Condition => #4
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject endW
        -> Delay(DueTime=PT2S)
        -> Condition => #7
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        NewThreadScheduler
        -> Delay(DueTime=PT1S)
        -> MulticastSubject Evoked_on
        -> StringProperty(Value=Evoked_No_end)
        -> MulticastSubject outputs => #12
        #12, #4 -> TakeUntil => #13
        #13, #7 -> SubscribeWhen
        -> Repeat
        -> IntProperty(Value=1)
        -> Accumulate
        -> BehaviorSubject above30End => #18
        #18, #2 -> TakeUntil
        -> WorkflowOutput
    -> Equal(Operand=IntProperty(Value=30)) => #1
    GroupWorkflow "Whisking evoked"
        SubscribeSubject above30NoEnd
        -> Equal(Operand=IntProperty(Value=30))
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject endW
        -> Delay(DueTime=PT2S)
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject endW
        -> Condition => #7
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        NewThreadScheduler
        -> Delay(DueTime=PT1S)
        -> MulticastSubject Evoked_on
        -> StringProperty(Value=Evoked_Whisk_end)
        -> MulticastSubject outputs => #12
        #12, #7 -> TakeUntil => #13
        #13, #5 -> SubscribeWhen
        -> Repeat
        -> IntProperty(Value=1)
        -> Accumulate
        -> BehaviorSubject above30NoEnd => #18
        #18, #2 -> TakeUntil
        -> WorkflowOutput
    -> Equal(Operand=IntProperty(Value=30)) => #3
    #1, #3 -> Zip
    -> PublishSubject "Stop Recording"
SubscribeSubject "End Exp" => #29
#28, #29 -> SubscribeWhen

GroupWorkflow "Arduino Barcode"
    SubscribeSubject "Stop Recording"
    -> StringProperty(Value=q)
    -> Bonsai.IO.SerialStringWrite(PortName=COM9, NewLine=\r\n)

    StringProperty(Value=s)
    -> Bonsai.IO.SerialStringWrite(PortName=COM9, NewLine=\r\n)

Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift", SuppressRepetitions=false)
-> BooleanProperty(Value=false) => #33
SubscribeSubject Evoked_on
-> BooleanProperty(Value=false) => #35
#33, #35 -> Merge
-> SelectMany Evoked_aud
    ImmediateScheduler
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=150000, Frequency=100, Waveform=Sine, SampleRate=150000, Amplitude=0.008, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=3750
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> Delay(DueTime=PT0.1S)
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=150000, Frequency=2000, Waveform=Sine, SampleRate=150000, Amplitude=0.12, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=7500
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> Delay(DueTime=PT0.1S)
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=30000, Frequency=4000, Waveform=Sine, SampleRate=150000, Amplitude=0.02, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=7500
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> Delay(DueTime=PT0.1S)
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=30000, Frequency=8000, Waveform=Sine, SampleRate=150000, Amplitude=0.02, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=7500
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> Delay(DueTime=PT0.1S)
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=30000, Frequency=16000, Waveform=Sine, SampleRate=150000, Amplitude=0.0115, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=7500
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> Delay(DueTime=PT0.1S)
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=30000, Frequency=32000, Waveform=Sine, SampleRate=150000, Amplitude=0.115, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=7500
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> Delay(DueTime=PT0.1S)
    -> Bonsai.Dsp.FunctionGenerator(BufferLength=30000, Frequency=64000, Waveform=Sine, SampleRate=150000, Amplitude=1.12, Offset=0, Phase=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=150000
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=7500
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    -> WorkflowOutput

GroupWorkflow FakeObj
    ImmediateScheduler
    -> Bonsai.Dsp.MatrixReader => #1
      Path="C:\Users\lampl\Neuropixel experiment\Aluminum_noise_1.wav"
      Offset=50
      SampleRate=250000
      ChannelCount=1
      BufferLength=2000000
      Depth=S32
      Layout=RowMajor
    -> Bonsai.Dsp.Butterworth(SampleRate=250000, Cutoff1=30000, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Rescale(Min=-100000000, Max=100000000, RangeMin=-0.02, RangeMax=0.02, RescaleType=Linear) => #3
    #1 -> Bonsai.Dsp.Butterworth(SampleRate=250000, Cutoff1=25000, Cutoff2=50000, FilterOrder=3, FilterType=BandPass)
    -> Bonsai.Dsp.Rescale(Min=-100000000, Max=100000000, RangeMin=-0.6, RangeMax=0.6, RescaleType=Linear) => #5
    #1 -> Bonsai.Dsp.Butterworth(SampleRate=250000, Cutoff1=45000, Cutoff2=0, FilterOrder=3, FilterType=HighPass)
    -> Bonsai.Dsp.Rescale(Min=-50000000, Max=50000000, RangeMin=-20, RangeMax=20, RescaleType=Linear) => #7
    #3, #5, #7 -> Zip
    -> Add
    -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.08, Shift=0)
    -> BehaviorSubject Fake_object

    SubscribeSubject Fake_object
    -> Bonsai.DAQmx.AnalogOutput => #13
      SignalSource=""
      SampleRate=250000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=50000
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
    SubscribeSubject playSound => #14
    #13, #14 -> SubscribeWhen => #15
    SubscribeSubject stopSound => #16
    #15, #16 -> TakeUntil
    -> Repeat

    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 A B C D E F G Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=false)
    -> PublishSubject playSound

    Bonsai.Windows.Input.KeyDown(Filter="Back H Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=false)
    -> PublishSubject stopSound
